PsychoPy2experiment version="1.80.06"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = Desktop external monitor
  Window size (pixels) = [1280, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u'001'}
  Save csv file = True
  expName = SSVP5_75
  Units = cm
  Screen = 1
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Routines
  Routine InterTrial
    GratingComponent Fixation
      tex = gauss
      stopVal [duration (frames)] = 120
      startVal [time (s)] = 0.0
      sf = None
      size = [0.05, 0.05]
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    CodeComponent Send_Code_Time
      Begin Experiment:
        import serial #BP Serial functions
        #-------BP serial port-------
        ser = serial.Serial('/dev/cu.usbserial-FTGQVV1C', baudrate=57600, bytesize=8, parity='N', stopbits=1, timeout=None, xonxoff=1) #xonxoff was 1

        import time #BP to use time.time
      End Routine:
        firstLoop=True
      End Experiment:
        ser.close() #BP
  Routine endOfExperiment
    TextComponent ThankYou
      text = thank you
      stopVal [duration (s)] = 4
      startVal [time (s)] = 3
      letterHeight = 1.5
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    SoundComponent sound_1
      sound = A
      stopVal [duration (s)] = 1
      startVal [time (s)] = 3.5
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  Routine trial
    CodeComponent code_timestamp
      Each Frame:
        # Its going to write something for each frame, might as well put time stame
        t=time.time()#t=time.clock() # what is the difference?
        timeString= "%.5f" %t
        thisExp.addData('FrameTimeStamps',timeString)
      Begin Routine:
        # send time stamp
        #if firstLoop==True:
        #    t=time.time()#t=time.clock() # what is the difference?
        #    timeString= "%.5f" %t
        #    thisExp.addData('timestamp',timeString)
        # send code
        if firstLoop==True:
            ser.write(chr(70)) # BP send code 70
            firstLoop=False
            thisExp.addData('CodeSent',70)
      End Routine:
        thisExp.addData('frameNumber',frameN)
    GratingComponent pattern1
      stopVal [duration (frames)] = 4
      durationEstim = .05
      startEstim = 0
      units = cm
      texture resolution = 256
      startVal [frame N] = 0.0
      sf = 1
      size = 3
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    GratingComponent pattern2
      color = $[-1,-1,-1]
      stopVal [duration (frames)] = 4
      durationEstim = .03333333
      startEstim = .05
      units = cm
      texture resolution = 256
      phase = 0
      startVal [frame N] = 4
      sf = 1
      size = 3
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  Routine EndOfExperiment
  Routine Blank
    TextComponent text
      stopVal [duration (frames)] = 120
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    GratingComponent fixation
      tex = gauss
      stopVal [duration (frames)] = 120
      startVal [time (s)] = 0.0
      sf = None
      size = [0.05, 0.05]
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  Routine Instructions
    TextComponent instructions
      startVal [time (s)] = 0.0
      letterHeight = 1.
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      text:
        Start to save file

        Press space bar to begin
    KeyboardComponent key_resp_start
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  Routine Blank
  LoopInitiator trials_120 loopType="TrialHandler"
    loopType = random
    nReps = 120
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    Routine InterTrial
    LoopInitiator withinATrial_fill_4_sec loopType="TrialHandler"
      loopType = sequential
      nReps = 30
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      Routine trial
    LoopTerminator withinATrial_fill_4_sec
  LoopTerminator trials_120
  Routine endOfExperiment
